PsychoPy2experiment version="2020.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = trk-encoding
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Routines
  Routine trials_run_1
    ImageComponent main_image
      image [set every repeat] = $TripletMemberA
      pos [set every repeat] = (Xcoordinate,Ycoordinate)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine select_stimuli_table
    TextComponent setup_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $stimuli_table
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        tables = [0,1]
        selected = np.random.choice(tables)
        selected = str(selected)
        stimuli_table = 'stimuli_tables/encoding_trials_'+ selected + '.csv'
        selection = [0,1,2,3]
      Begin JS Experiment:
        tables = [0, 1];
        selected = tables[Math.floor(Math.random() * tables.length)];;
        selected = selected.toString();
        stimuli_table = (("stimuli_tables/encoding_trials_" + selected) + ".csv");
        selection = [0, 1, 2, 3];
Flow
  Routine select_stimuli_table
  LoopInitiator run_1 loopType="TrialHandler"
    Selected rows = $selection
    conditionsFile = $stimuli_table
    loopType = sequential
    nReps = 1
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    Routine trials_run_1
  LoopTerminator run_1
